PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = fyp
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Routines
  Routine instr1
    TextComponent instr_text1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        欢迎参加本次实验！
        开始实验前，请仔细阅读以下说明。
  Routine instr3
    TextComponent instr_text3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        所有的判断都将用到空格键
        当您认为出现的词语属于两个分类之一
        请以最快的速度按下空格键
        当您认为词语不属于分类，不要按空格键
        请等待程序自动运行，直到出现下一个词语


        按空格键开始练习
    KeyboardComponent key_resp2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine practice
    TextComponent target1_text
      letterHeight = 0.1
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text [set every repeat] = $target1
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    TextComponent target2_text
      letterHeight = 0.1
      pos = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text [set every repeat] = $target2
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    TextComponent stimulus_text
      letterHeight = 0.1
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 2.3
      text [set every repeat] = $word
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    KeyboardComponent key_resp_practice
      allowedKeys = 'space'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 2.3
      storeCorrect = True
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  Routine instr4
    TextComponent instr_text4
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        练习试次已完成，正式实验中将不会出现反馈
        请确认您周边环境安静无干扰

        按空格键开始正式实验
    KeyboardComponent key_resp3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine ending_instr
    TextComponent ending_text
      font = SimHei
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        感谢您的时间！
        请您退出后继续完成剩余问卷
        不要刷新程序，否则数据可能上传失败

        按空格键退出
    KeyboardComponent key_resp_ending
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine feedback
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_practice.corr:
            feedback_text.text = 'O'
            feedback_text.color = 'green'
        else:
            feedback_text.text = 'X'
            feedback_text.color = 'red'
    TextComponent feedback_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine formal_trial
    TextComponent trial_text1
      letterHeight = 0.1
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text [set every repeat] = $go1_label
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    TextComponent trial_text2
      letterHeight = 0.1
      pos = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text [set every repeat] = $go2_label
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    TextComponent formal_stimulus_text
      letterHeight = 0.1
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 2.3
      text [set every repeat] = $word
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    KeyboardComponent key_resp_formal
      allowedKeys = 'space'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 2.3
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('block', block)
  Routine resting
    TextComponent text
      font = SimHei
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        休息一下

        按空格键继续实验
    KeyboardComponent key_resp_resting
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instr2add
    TextComponent instr_text2_add
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        注意：
        “工具”类特指现实中可触摸的传统物品
        "AI伴侣"类则强调AI智能及其陪伴属性

        按空格键继续
    KeyboardComponent key_resp1
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instr2
    TextComponent instr_text2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        本次实验涉及词语分类判断
        您需要判断出现的词语是否属于两种分类之一

        举例：
        当出现“算法”一词
        您可能需要判断该词属于“AI伴侣”类还是“消极”类
        （“算法”属于“AI伴侣”类）
        您也可能需要判断：
        “可憎的”是属于“工具”词语类还是“积极”词语类
        （两种都不符合）

        按空格键继续
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine instr1
  Routine instr2
  Routine instr2add
  Routine instr3
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = practice_stimulus.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'category': 'AI伴侣', 'word': '算法', 'target1': 'AI伴侣', 'target2': '消极', 'trial_type': 'go', 'correct_key': 'space'},
      {'category': '积极', 'word': '可爱的', 'target1': '工具', 'target2': '消极', 'trial_type': 'no-go', 'correct_key': 'None'},
      {'category': '消极', 'word': '可恨的', 'target1': 'AI伴侣', 'target2': '积极', 'trial_type': 'no-go', 'correct_key': 'None'},
      {'category': '工具', 'word': '尺子', 'target1': '工具', 'target2': '积极', 'trial_type': 'go', 'correct_key': 'space'},
      {'category': 'AI伴侣', 'word': '对话系统', 'target1': 'AI伴侣', 'target2': '积极', 'trial_type': 'go', 'correct_key': 'space'}]
    Routine practice
    Routine feedback
  LoopTerminator trials
  Routine instr4
  LoopInitiator formal_blocks loopType="TrialHandler"
    conditionsFile = block_plan.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'block': 'tool_neg', 'go1_label': '工具', 'go2_label': '消极', 'nogo1_label': 'AI伴侣', 'nogo2_label': '积极', 'condsFile': 'formal_tool_neg.xlsx'},
      {'block': 'ai_pos', 'go1_label': 'AI伴侣', 'go2_label': '积极', 'nogo1_label': '工具', 'nogo2_label': '消极', 'condsFile': 'formal_ai_pos.xlsx'},
      {'block': 'tool_pos', 'go1_label': '工具', 'go2_label': '积极', 'nogo1_label': 'AI伴侣', 'nogo2_label': '消极', 'condsFile': 'formal_tool_pos.xlsx'},
      {'block': 'ai_neg', 'go1_label': 'AI伴侣', 'go2_label': '消极', 'nogo1_label': '工具', 'nogo2_label': '积极', 'condsFile': 'formal_ai_neg.xlsx'}]
    LoopInitiator formal_trials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = random
      nReps = 1
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      Routine formal_trial
    LoopTerminator formal_trials
    Routine resting
  LoopTerminator formal_blocks
  Routine ending_instr
